PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Motor_Learning_Exp
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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  Routine trial2
    PolygonComponent fixtion
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent line_1
      fillColor = white
      ori = 90
      pos = (-150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_2
      fillColor = white
      ori = 90
      pos = (-50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_3
      fillColor = white
      ori = 90
      pos = (50, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent line_4
      fillColor = white
      ori = 90
      pos = (150, 0)
      shape = rectangle
      size = (100, 10)
      startVal [time (s)] = 1.0
      units = pix
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    PolygonComponent probe2
      fillColor = white
      pos [set every repeat] = (pos, 60)
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 2.0
      units = pix
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    KeyboardComponent key_resp_2
      correctAns = $corr_resp
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Motor_Learning_Exp1.csv
    loopType = sequential
    nReps = 24
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Motor_Learning_Exp1.csv
    loopType = fullRandom
    nReps = 24
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    conditions:
      [OrderedDict([('pos', -50), ('corr_resp', 'x')]),
      OrderedDict([('pos', 150), ('corr_resp', 'v')]),
      OrderedDict([('pos', 50), ('corr_resp', 'c')]),
      OrderedDict([('pos', -150), ('corr_resp', 'z')])]
    Routine trial2
  LoopTerminator trials_2
